PsychoPy2experiment version="1.83.03"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = dots1
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    DotsComponent dots
      startVal [time (s)] = 0.0
      fieldPos = [0.0, 0.0]
      speed = 0.1
      noiseDots = direction
      dotLife = 3
      fieldShape = circle
      coherence = 1.0
      nDots = 100
      stopVal [duration (s)] = 1.0
      fieldSize = 1.0
      signalDots = same
      dotSize = 2
      dir = 0.0
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    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
Flow
  Routine trial
