PsychoPy2experiment version="1.83.03"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = helloworld
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Hello World
Flow
  Routine trial
